CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[]
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:4
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (directory does contain "vdac1")
    Name to assign these images:vdac1
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (directory does contain "insulin")
    Name to assign these images:insulin
    Name to assign these objects:Nucleus
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (directory does contain "ndufb8")
    Name to assign these images:ndufb8
    Name to assign these objects:Cytoplasm
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (directory does contain "ecadherin")
    Name to assign these images:ecadherin
    Name to assign these objects:Speckle
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:None

GaussianFilter:[module_num:5|svn_version:'Unknown'|variable_revision_number:1|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:ecadherin
    Name the output image:ecad
    Sigma:1

RescaleIntensity:[module_num:6|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:ecad
    Name the output image:ecadherin_rescale
    Rescaling method:Stretch each image to use the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
    Lower intensity limit for the input image:0.0
    Upper intensity limit for the input image:1.0
    Intensity range for the input image:0.0,1.0
    Intensity range for the output image:0.0,1.0
    Select image to match in maximum intensity:None
    Divisor value:1.0
    Divisor measurement:None

ImageMath:[module_num:7|svn_version:'Unknown'|variable_revision_number:5|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ecadherin_ImageAfterMath
    Image or measurement?:Image
    Select the first image:ecadherin_rescale
    Multiply the first image by:1.0
    Measurement:
    Image or measurement?:Image
    Select the second image:None
    Multiply the second image by:1.0
    Measurement:

IdentifyPrimaryObjects:[module_num:8|svn_version:'Unknown'|variable_revision_number:15|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:ecadherin_ImageAfterMath
    Name the primary objects to be identified:cellboundaries
    Typical diameter of objects, in pixel units (Min,Max):50,150
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:60
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.07,0.1
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:400
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Otsu

GrayToColor:[module_num:9|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:ecadherin_rescale
    Select the image to be colored green:Leave this black
    Select the image to be colored blue:insulin
    Name the output image:islet
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
    Select the image to be colored cyan:Leave this black
    Select the image to be colored magenta:Leave this black
    Select the image to be colored yellow:Leave this black
    Select the image that determines brightness:Leave this black
    Relative weight for the cyan image:1.0
    Relative weight for the magenta image:1.0
    Relative weight for the yellow image:1.0
    Relative weight for the brightness image:1.0
    Hidden:1
    Image name:None
    Color:#ff0000
    Weight:1.0

OverlayOutlines:[module_num:10|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Display outlines on a blank image?:No
    Select image on which to display outlines:islet
    Name the output image:segmentationchecker
    Outline display mode:Color
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
    Select outline color:green
    Select objects to display:cellboundaries

SaveImages:[module_num:11|svn_version:'Unknown'|variable_revision_number:16|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:segmentationchecker
    Select method for constructing file names:From image filename
    Select image name for file prefix:insulin
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:No
    Text to append to the image name:
    Saved file format:tiff
    Output file location:Elsewhere...|H:\\NDUFB8\\SegmentedImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)
    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:12|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:insulin, ndufb8, vdac1
    Select objects to measure:cellboundaries

MeasureObjectSizeShape:[module_num:13|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select object sets to measure:cellboundaries
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:14|svn_version:'Unknown'|variable_revision_number:13|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|H:\\NDUFB8
    Create a GenePattern GCT file?:No
    Select source of sample row name:Metadata
    Select the image to use as the identifier:None
    Select the metadata to use as the identifier:None
    Export all measurement types?:Yes
    Press button to select measurements:
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Do not use
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:Yes
